WorkflowBuilder(Version=2.6.2)
NestedWorkflow Stim
    ExternalizedMapping(TranslationZ)
    -> GroupWorkflow InitializeVars
        GroupWorkflow RotaryEncoderSubjects
            BehaviorSubject<System.Tuple(System.UInt32,System.Byte)> RawEncoderEvents
            BehaviorSubject<System.Tuple(System.UInt32,System.Int16)> RawEncoderPositions
            BehaviorSubject<System.Double> EncoderPosition
            BehaviorSubject<System.UInt16> BpodEvent

        Bonsai.Osc.CreateUdpClient(Name=bpod, Port=7110, RemoteHostName=127.0.0.1, RemotePort=0)

        ExternalizedMapping(TranslationZ)
        -> GroupWorkflow ScreenVars
            PublishSubject<OpenTK.Matrix4> DrawStim
            PublishSubject<OpenTK.Matrix4> DrawSyncSquare

            ExternalizedMapping(Value(DisplayName=TranslationZ))
            -> FloatProperty(Value=-7)
            -> BehaviorSubject TranslationZ

            FloatProperty(Value=15)
            -> BehaviorSubject ScreenHeight

            FloatProperty(Value=0)
            -> BehaviorSubject UpdateSyncSquare

            FloatProperty(Value=20)
            -> BehaviorSubject ScreenWidth
            -> Divide(Operand=FloatProperty(Value=2)) => #11
            SubscribeSubject TranslationZ
            -> Bonsai.Numerics.Abs
            -> PropertyMapping(Value) => #14
            #11, #14 -> Divide(Operand=FloatProperty(Value=7))
            -> Bonsai.Numerics.Atan
            -> Bonsai.Numerics.RadianToDegree
            -> Multiply(Operand=DoubleProperty(Value=2))
            -> BehaviorSubject VisualSpan

        GroupWorkflow TrialVars
            IntProperty(Value=0) => #0
            -> BehaviorSubject TrialNum
            #0 -> BehaviorSubject TrialStimReverse

            FloatProperty(Value=0) => #3
            -> BehaviorSubject TrialStimContrast
            #3 -> BehaviorSubject TrialInitPosition
            #3 -> BehaviorSubject TrialStimFreq
            #3 -> BehaviorSubject TrialStimAngle
            #3 -> Bonsai.Dsp.Pow(Power=2)
            -> BehaviorSubject TrialStimSize
            #3 -> Bonsai.Numerics.RadianToDegree
            -> BehaviorSubject TrialStimPhase
            #3 -> BehaviorSubject TrialWheelGain

        FloatProperty(Value=0) => #5
        -> BehaviorSubject StimContrast
        #5 -> BehaviorSubject StimLocationX

        Disable GroupWorkflow Overrides
            Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false)
            -> IntProperty(Value=1) => #1
            Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
            -> IntProperty(Value=2) => #3
            Bonsai.Windows.Input.KeyDown(Filter=D3, SuppressRepetitions=false)
            -> IntProperty(Value=3) => #5
            Bonsai.Windows.Input.KeyDown(Filter=D4, SuppressRepetitions=false)
            -> IntProperty(Value=4) => #7
            Bonsai.Windows.Input.KeyDown(Filter=D5, SuppressRepetitions=false)
            -> IntProperty(Value=5) => #9
            #1, #3, #5, #7, #9 -> Merge
            -> MulticastSubject BpodEvent

            Bonsai.Shaders.Input.MouseMove
            -> MemberSelector(Selector=EventArgs.X)
            -> Bonsai.Dsp.Rescale(Min=0, Max=1024, RangeMin=-25, RangeMax=25, RescaleType=Linear)
            -> MulticastSubject EncoderPosition

            FloatProperty(Value=4)
            -> MulticastSubject TrialWheelGain

            FloatProperty(Value=49)
            -> MulticastSubject TrialStimSize

            FloatProperty(Value=0.1)
            -> MulticastSubject TrialStimFreq

            FloatProperty(Value=1)
            -> MulticastSubject TrialStimContrast

            FloatProperty(Value=-35)
            -> MulticastSubject TrialInitPosition

    ExternalizedMapping(sync_x, sync_y)
    -> GroupWorkflow Screen
        Bonsai.Shaders.CreateWindow
          Width=1280
          Height=960
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame => #3
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
        -> MulticastSubject DrawStim
        -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil) => #6
        SubscribeSubject TranslationZ
        -> PropertyMapping(Z)
        -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=-7)
        -> PropertyMapping(Translation) => #10
        SubscribeSubject ScreenWidth => #11
        SubscribeSubject ScreenHeight => #12
        #11, #12 -> Zip
        -> PropertyMapping(Width(Selector=Item1), Height(Selector=Item2)) => #14
        #6, #10, #14 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-7))
        #3 -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> MulticastSubject DrawSyncSquare => #17
        -> IntProperty(Value=1) => #18
        SubscribeSubject UpdateSyncSquare => #19
        #18, #19 -> Sample
        -> Accumulate
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it % 2
        -> PropertyMapping(ColorR, ColorG, ColorB) => #23
        ExternalizedMapping(Value(DisplayName=sync_x))
        -> FloatProperty(Value=1.33) => #25
        ExternalizedMapping(Value(DisplayName=sync_y))
        -> FloatProperty(Value=-1.03) => #27
        #25, #27 -> Zip
        -> PropertyMapping(LocationX(Selector=Item1), LocationY(Selector=Item2)) => #29
        #17, #23, #29 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=1.33
          LocationY=-1.03
          Layer=1
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1

        SubscribeSubject DrawStim => #31
        SubscribeSubject TrialStimFreq
        -> PropertyMapping(SpatialFrequency) => #33
        SubscribeSubject VisualSpan
        -> PropertyMapping(ExtentX, ExtentY) => #35
        SubscribeSubject TrialStimSize => #36
        SubscribeSubject VisualSpan
        -> PropertyMapping(Max) => #38
        #36, #38 -> Bonsai.Dsp.Rescale(Min=0, Max=110.01596088640814, RangeMin=0, RangeMax=1, RescaleType=Linear)
        -> PropertyMapping(Radius, Aperture) => #40
        SubscribeSubject StimLocationX
        -> PropertyMapping(LocationX) => #42
        SubscribeSubject StimContrast => #43
        -> PropertyMapping(Contrast) => #44
        #43 -> Condition NonZeroContrast
            WorkflowInput Source1
            -> GreaterThan(Operand=FloatProperty(Value=0.001))
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #46
        #43 -> Condition ContrastZero
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=FloatProperty(Value=0.001))
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #48
        #46, #48 -> Merge
        -> PropertyMapping(Opacity) => #50
        SubscribeSubject TrialStimPhase
        -> PropertyMapping(Phase) => #52
        #31, #33, #35, #40, #42, #44, #50, #52 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=35
          LocationY=0
          Layer=1
          Angle=0
          SpatialFrequency=0.1
          TemporalFrequency=0
          Phase=2811.00757
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=0.445389926
          Aperture=0.445389926
          Opacity=1
          ExtentX=110.015961
          ExtentY=110.015961

    ExternalizedMapping(REPortName)
    -> GroupWorkflow RotaryEncoder
        ExternalizedMapping(PortName(DisplayName=REPortName))
        -> Bonsai.Bpod.Encoder(PortName=COM7) => #1
        -> Bonsai.Bpod.EncoderEvent
        -> MemberSelector(Selector="Timestamp,Data") => #3
        -> MulticastSubject RawEncoderEvents
        #3 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.ExpressionTransform "ushort(it)"
          Expression: Uint16(it)
        -> MulticastSubject BpodEvent
        #1 -> Bonsai.Bpod.EncoderPosition
        -> MemberSelector(Selector="Timestamp,Position") => #9
        -> MulticastSubject RawEncoderPositions
        #9 -> MemberSelector(Selector=Item2)
        -> Bonsai.Dsp.Rescale(Min=-512, Max=512, RangeMin=-180, RangeMax=180, RescaleType=Linear)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MulticastSubject EncoderPosition

    GroupWorkflow TrialVarUpdates(Description="Defines the logic for updating workflow variables with bpod trial variables calculated on next_trial. Happens once per trial.")
        Bonsai.Osc.ReceiveMessage(Address=/t, TypeTag=i, Connection=bpod)
        -> MulticastSubject TrialNum

        Bonsai.Osc.ReceiveMessage(Address=/p, TypeTag=i, Connection=bpod)
        -> MulticastSubject TrialInitPosition

        Bonsai.Osc.ReceiveMessage(Address=/r, TypeTag=i, Connection=bpod)
        -> MulticastSubject TrialStimReverse

        Bonsai.Osc.ReceiveMessage(Address=/re, TypeTag=i, Connection=bpod)
        -> MulticastSubject BpodEvent

        Bonsai.Osc.ReceiveMessage(Address=/c, TypeTag=f, Connection=bpod)
        -> MulticastSubject TrialStimContrast

        Bonsai.Osc.ReceiveMessage(Address=/f, TypeTag=f, Connection=bpod)
        -> MulticastSubject TrialStimFreq

        Bonsai.Osc.ReceiveMessage(Address=/a, TypeTag=f, Connection=bpod)
        -> MulticastSubject TrialStimAngle

        Bonsai.Osc.ReceiveMessage(Address=/g, TypeTag=f, Connection=bpod)
        -> MulticastSubject TrialWheelGain

        Bonsai.Osc.ReceiveMessage(Address=/s, TypeTag=f, Connection=bpod)
        -> Bonsai.Dsp.Pow(Power=2)
        -> MulticastSubject TrialStimSize

        Bonsai.Osc.ReceiveMessage(Address=/h, TypeTag=f, Connection=bpod)
        -> Bonsai.Numerics.RadianToDegree
        -> MulticastSubject TrialStimPhase

    SubscribeSubject BpodEvent => #7
    -> Condition "(1)HideStim"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany HideStimulus => #9
        WorkflowInput Source1
        -> Take(Count=1)
        -> IntProperty(Value=0)
        -> MulticastSubject StimContrast
        -> MulticastSubject UpdateSyncSquare
        -> WorkflowOutput
    #7 -> Condition "(2)ShowStim"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=2))
        -> WorkflowOutput
    -> SelectMany UpdateInitPosition
        WorkflowInput Source1 => #0
        SubscribeSubject TrialInitPosition => #1
        #1, #0 -> Sample
        -> Take(Count=1) => #3
        -> Condition "StimReverse is 0"
            WorkflowInput Source1 => #0
            SubscribeSubject TrialStimReverse => #1
            #1, #0 -> Sample
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform CastToSingle => #5
          Expression: single(it)
        #3 -> Condition "StimReverse is 1"
            WorkflowInput Source1 => #0
            SubscribeSubject TrialStimReverse => #1
            #1, #0 -> Sample
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform CastToInvertedSingle => #7
          Expression: single(-it)
        #5, #7 -> Merge
        -> MulticastSubject StimLocationX
        -> WorkflowOutput
    -> SelectMany ShowStim => #12
        WorkflowInput Source1 => #0
        SubscribeSubject TrialStimContrast => #1
        #1, #0 -> Sample
        -> Take(Count=1)
        -> MulticastSubject StimContrast
        -> MulticastSubject UpdateSyncSquare
        -> WorkflowOutput
    #7 -> Condition "(3,4)CloseLoop"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=3))
        -> WorkflowOutput
    -> SelectMany MoveWithWheel
        WorkflowInput Source1 => #0
        SubscribeSubject EncoderPosition => #1
        #1, #0 -> SubscribeWhen
        -> GroupWorkflow GainConverter => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="WheelRadius(mm)"))
            -> FloatProperty(Value=31) => #2
            ExternalizedMapping(Value(DisplayName=Pi))
            -> FloatProperty(Value=3.14159274) => #4
            ExternalizedMapping(Value(DisplayName=2))
            -> FloatProperty(Value=2) => #6
            #4, #6 -> Zip
            -> Multiply => #8
            #2, #8 -> Zip
            -> Multiply => #10
            ExternalizedMapping(Value(DisplayName=360))
            -> FloatProperty(Value=360) => #12
            #10, #12 -> Zip
            -> Divide => #14
            SubscribeSubject TrialWheelGain => #15
            #15, #14 -> CombineLatest
            -> Multiply => #17
            ExternalizedMapping(Value(DisplayName=1))
            -> FloatProperty(Value=1) => #19
            #19, #17 -> Zip
            -> Divide => #21
            #0, #21 -> CombineLatest
            -> Divide
            -> WorkflowOutput
        -> Condition Reverse
            WorkflowInput Source1 => #0
            SubscribeSubject TrialStimReverse => #1
            #1, #0 -> Sample
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #5
          Expression: -it
        #3 -> Condition Normal => #6
            WorkflowInput Source1 => #0
            SubscribeSubject TrialStimReverse => #1
            #1, #0 -> Sample
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #6, #5 -> Merge => #7
        SubscribeSubject TrialInitPosition => #8
        #7, #8 -> CombineLatest => #9
        -> Bonsai.Scripting.ExpressionTransform => #10
          Expression: ((Item1+Item2) + 180) % 360 - 180
        #9 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.ExpressionTransform => #12
          Expression: Math.Abs(it)
        #9 -> MemberSelector(Selector=Item1)
        -> Bonsai.Scripting.ExpressionTransform => #14
          Expression: Math.Abs(it)
        #12, #14 -> Zip
        -> Subtract => #16
        -> Condition MovedEnough => #17
            WorkflowInput Source1 => #0
            FloatProperty(Value=0) => #1
            #0, #1 -> CombineLatest
            -> LessThanOrEqual
            -> WorkflowOutput
        #16 -> Condition NotMovedEnough
            WorkflowInput Source1 => #0
            FloatProperty(Value=0) => #1
            #0, #1 -> CombineLatest
            -> GreaterThan
            -> WorkflowOutput
        -> IntProperty(Value=0) => #19
        #10, #19 -> Zip
        -> Condition Paint
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> Disable NotEqual(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject StimLocationX
        -> MulticastSubject UpdateSyncSquare => #24
        #16 -> Condition BpodSaysFreeze => #25
            WorkflowInput Source1 => #0
            IntProperty(Value=4) => #1
            SubscribeSubject BpodEvent => #2
            #2, #0 -> Sample => #3
            #3, #1 -> CombineLatest
            -> Equal
            -> WorkflowOutput
        #17, #25 -> Merge => #26
        #24, #26 -> TakeUntil => #27
        FloatProperty(Value=-180)
        -> Take(Count=1) => #29
        #27, #29 -> Merge
        -> Last
        -> WorkflowOutput
    -> SelectMany LastFrame => #15
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Condition LessThan35
            WorkflowInput Source1
            -> LessThan(Operand=DoubleProperty(Value=35))
            -> WorkflowOutput
        -> Condition GreaterThan-35
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=-35))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #4
        #1 -> Condition LessThanOrEqual-35
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=DoubleProperty(Value=-35))
            -> WorkflowOutput
        -> DoubleProperty(Value=-70) => #6
        #1 -> Condition GreaterThanOrEqual35
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=35))
            -> WorkflowOutput
        -> DoubleProperty(Value=70) => #8
        #4, #6, #8 -> Merge
        -> MulticastSubject StimLocationX
        -> MulticastSubject UpdateSyncSquare
        -> WorkflowOutput
    #7 -> Condition "(5)ShowCenter"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=5))
        -> WorkflowOutput
    -> SelectMany ShowCenter => #17
        WorkflowInput Source1 => #0
        FloatProperty(Value=0) => #1
        #1, #0 -> Sample
        -> MulticastSubject StimLocationX
        -> MulticastSubject UpdateSyncSquare
        -> WorkflowOutput
    #9, #12, #15, #17 -> Merge
    -> Repeat

    ExternalizedMapping(FileNamePositions, FileNameTrialInfo, FileNameEvents, FileNameStimPositionScreen, FileNameSyncSquareUpdate)
    -> GroupWorkflow SaveData
        SubscribeSubject RawEncoderPositions => #0
        ExternalizedMapping(FileName(DisplayName=FileNamePositions)) => #1
        #0, #1 -> Bonsai.IO.CsvWriter
          FileName=c:\iblrig_data\Subjects\_iblrig_test_mouse\2021-12-14\002\raw_behavior_data\_iblrig_encoderPositions.raw.ssv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false

        SubscribeSubject TrialNum => #3
        SubscribeSubject TrialInitPosition => #4
        SubscribeSubject TrialStimContrast => #5
        SubscribeSubject TrialStimFreq => #6
        SubscribeSubject TrialStimAngle => #7
        SubscribeSubject TrialWheelGain => #8
        SubscribeSubject TrialStimSize => #9
        #3, #4, #5, #6, #7, #8, #9 -> Zip => #10
        SubscribeSubject TrialStimPhase => #11
        #10, #11 -> Zip
        -> Timestamp => #13
        ExternalizedMapping(FileName(DisplayName=FileNameTrialInfo)) => #14
        #13, #14 -> Bonsai.IO.CsvWriter
          FileName=c:\iblrig_data\Subjects\_iblrig_test_mouse\2021-12-14\002\raw_behavior_data\_iblrig_encoderTrialInfo.raw.ssv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false

        SubscribeSubject RawEncoderEvents => #16
        ExternalizedMapping(FileName(DisplayName=FileNameEvents)) => #17
        #16, #17 -> Bonsai.IO.CsvWriter
          FileName=c:\iblrig_data\Subjects\_iblrig_test_mouse\2021-12-14\002\raw_behavior_data\_iblrig_encoderEvents.raw.ssv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false

        SubscribeSubject StimContrast => #19
        SubscribeSubject StimLocationX => #20
        #19, #20 -> CombineLatest
        -> Timestamp => #22
        ExternalizedMapping(FileName(DisplayName=FileNameStimPositionScreen)) => #23
        #22, #23 -> Bonsai.IO.CsvWriter
          FileName=c:\iblrig_data\Subjects\_iblrig_test_mouse\2021-12-14\002\raw_behavior_data\_iblrig_stimPositionScreen.raw.csv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false

        SubscribeSubject UpdateSyncSquare
        -> Timestamp => #26
        ExternalizedMapping(FileName(DisplayName=FileNameSyncSquareUpdate)) => #27
        #26, #27 -> Bonsai.IO.CsvWriter
          FileName=c:\iblrig_data\Subjects\_iblrig_test_mouse\2021-12-14\002\raw_behavior_data\_iblrig_syncSquareUpdate.raw.csv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false

    Bonsai.Shaders.WindowClosed => #22
    Bonsai.Osc.ReceiveMessage(Address=/x, TypeTag=i, Connection=bpod) => #23
    #22, #23 -> TakeUntil
    -> WorkflowOutput
-> Take(Count=1)
-> Delay(DueTime=PT1S)
